begintemplate A140612_1
  public init

  public soma, dend, apic, axon, iseg, hill, myelin, node
  public all, somatic, apical, axonal, basal, isegs, hills, myelins, nodes
  public density,SomaStimSec,DendStimSec

  
  

proc celldef() {
  topol()
  subsets()
  geom()
  geom_nseg()
}

create soma[1], dend[61], apic[85]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  for i = 3, 4 connect dend[i](0), dend[1](1)
  connect dend[5](0), dend(1)
  for i = 6, 8 connect dend[i](0), soma(0.5)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect dend[11](0), soma(0.5)
  for i = 12, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  connect dend[18](0), dend[11](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), soma(0.5)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[23](1)
  connect dend[30](0), soma(0.5)
  for i = 31, 32 connect dend[i](0), dend[i-1](1)
  for i = 33, 34 connect dend[i](0), dend[31](1)
  connect dend[35](0), dend[30](1)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  for i = 38, 40 connect dend[i](0), dend[37](1)
  connect dend[41](0), soma(0.5)
  for i = 42, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  connect dend[50](0), dend[42](1)
  for i = 51, 53 connect dend[i](0), dend[i-1](1)
  connect dend[54](0), dend[52](1)
  connect dend[55](0), dend[51](1)
  connect dend[56](0), dend[50](1)
  for i = 57, 58 connect dend[i](0), dend[i-1](1)
  connect dend[59](0), dend[57](1)
  connect dend[60](0), dend[41](1)
  connect apic(0), soma(0.5)
  for i = 1, 18 connect apic[i](0), apic[i-1](1)
  connect apic[19](0), apic[17](1)
  connect apic[20](0), apic[16](1)
  for i = 21, 22 connect apic[i](0), apic[i-1](1)
  connect apic[23](0), apic[21](1)
  connect apic[24](0), apic[20](1)
  connect apic[25](0), apic[15](1)
  for i = 26, 27 connect apic[i](0), apic[i-1](1)
  connect apic[28](0), apic[26](1)
  connect apic[29](0), apic[25](1)
  connect apic[30](0), apic[14](1)
  connect apic[31](0), apic[13](1)
  for i = 32, 33 connect apic[i](0), apic[31](1)
  for i = 34, 35 connect apic[i](0), apic[33](1)
  connect apic[36](0), apic[12](1)
  for i = 37, 38 connect apic[i](0), apic[36](1)
  for i = 39, 40 connect apic[i](0), apic[38](1)
  connect apic[41](0), apic[11](1)
  for i = 42, 46 connect apic[i](0), apic[i-1](1)
  connect apic[47](0), apic[45](1)
  connect apic[48](0), apic[44](1)
  connect apic[49](0), apic[43](1)
  connect apic[50](0), apic[42](1)
  connect apic[51](0), apic[41](1)
  for i = 52, 54 connect apic[i](0), apic[i-1](1)
  connect apic[55](0), apic[53](1)
  connect apic[56](0), apic[52](1)
  connect apic[57](0), apic[51](1)
  connect apic[58](0), apic[10](1)
  connect apic[59](0), apic[9](1)
  connect apic[60](0), apic[8](1)
  connect apic[61](0), apic[7](1)
  for i = 62, 63 connect apic[i](0), apic[61](1)
  connect apic[64](0), apic[6](1)
  connect apic[65](0), apic[5](1)
  for i = 66, 67 connect apic[i](0), apic[i-1](1)
  connect apic[68](0), apic[66](1)
  connect apic[69](0), apic[65](1)
  connect apic[70](0), apic[4](1)
  connect apic[71](0), apic[3](1)
  connect apic[72](0), apic[2](1)
  connect apic[73](0), apic[1](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  connect apic[76](0), apic(1)
  for i = 77, 78 connect apic[i](0), apic[i-1](1)
  connect apic[79](0), apic[77](1)
  connect apic[80](0), apic[76](1)
  for i = 81, 82 connect apic[i](0), apic[80](1)
  for i = 83, 84 connect apic[i](0), apic[82](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-28.365, -16.1476, 0.0553361, 5.91798)
	pt3dadd(-27.6831, -17.6203, 0.0531628, 10.1259)
	pt3dadd(-27.0012, -19.093, 0.0509895, 11.1723)
	pt3dadd(-26.3192, -20.5656, 0.0488163, 12.2188)
	pt3dadd(-25.6373, -22.0383, 0.046643, 13.2688)
	pt3dadd(-24.9554, -23.511, 0.0444697, 14.763)
	pt3dadd(-24.2734, -24.9836, 0.0422965, 16.4061)
	pt3dadd(-23.5915, -26.4563, 0.0401232, 17.6779)
	pt3dadd(-22.9096, -27.929, 0.0379499, 18.2353)
	pt3dadd(-22.2276, -29.4016, 0.0357767, 18.7708)
	pt3dadd(-21.5457, -30.8743, 0.0336034, 19.1098)
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  }
}
proc shape3d_2() {
  dend[10] {	pt3dadd(28.36, -136.47, 5.35, 1.12)
	pt3dadd(28.23, -140.83, 5.35, 1.12)
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  }
}
proc shape3d_3() {
  dend[16] {	pt3dadd(-157.93, -138.48, -11.1, 1.24)
	pt3dadd(-162.51, -139.11, -12.6, 1.24)
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  }
}
proc shape3d_4() {
  dend[24] {	pt3dadd(-72.03, -39.99, -7.85, 1.98)
	pt3dadd(-76, -37.88, -7.85, 1.98)
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  }
}
proc shape3d_5() {
  dend[34] {	pt3dadd(-20.11, -109.99, -47.9, 1.12)
	pt3dadd(-21.72, -110.99, -50.2, 1.12)
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  }
}
proc shape3d_6() {
  dend[44] {	pt3dadd(12, -63.04, -17.9, 1.61)
	pt3dadd(16.09, -64.91, -17.9, 1.61)
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  }
}
proc shape3d_7() {
  dend[52] {	pt3dadd(11.9, -16.17, -27.3, 1.36)
	pt3dadd(15.48, -13.13, -27.25, 1.12)
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  }
}
proc shape3d_8() {
  dend[59] {	pt3dadd(46.33, 30.85, -56.1, 0.99)
	pt3dadd(46.33, 30.97, -56.35, 0.99)
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  }
}
proc shape3d_9() {
  apic[11] {	pt3dadd(-90.82, 357.37, -11.2, 4.34)
	pt3dadd(-91.07, 361.11, -11.2, 4.09)
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  }
}
proc shape3d_10() {
  apic[17] {	pt3dadd(-128.77, 1032.23, -35.95, 0.99)
	pt3dadd(-129.51, 1035.35, -36.05, 0.99)
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  }
}
proc shape3d_11() {
  apic[23] {	pt3dadd(-180.36, 1101.22, -70.25, 0.62)
	pt3dadd(-181.6, 1101.22, -70.25, 0.62)
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  }
}
proc shape3d_12() {
  apic[30] {	pt3dadd(-94.7, 1013.6, -53.75, 0.87)
	pt3dadd(-94.08, 1016.34, -53.9, 0.87)
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  }
}
proc shape3d_13() {
  apic[33] {	pt3dadd(-215.98, 1004.78, -52.2, 0.74)
	pt3dadd(-217.47, 1006.15, -50.35, 0.74)
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  }
}
proc shape3d_14() {
  apic[37] {	pt3dadd(-162.04, 1012.23, -8.7, 0.37)
	pt3dadd(-159.69, 1012.23, -8.7, 0.37)
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  }
}
proc shape3d_15() {
  apic[41] {	pt3dadd(-144.63, 594.09, -29.65, 2.23)
	pt3dadd(-145.63, 597.96, -29.65, 2.23)
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  }
}
proc shape3d_16() {
  apic[48] {	pt3dadd(-357.9, 1026.22, -36.05, 0.74)
	pt3dadd(-360.87, 1027.09, -36.05, 0.74)
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  }
}
proc shape3d_17() {
  apic[53] {	pt3dadd(-180.08, 1063.23, -47.85, 1.24)
	pt3dadd(-178.09, 1067.34, -47.85, 1.24)
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  }
}
proc shape3d_18() {
  apic[58] {	pt3dadd(-3.01, 328.12, -24.9, 1.12)
	pt3dadd(-1.78, 329.86, -24.9, 1.12)
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  }
}
proc shape3d_19() {
  apic[64] {	pt3dadd(-59.76, 196.59, -10.55, 1.49)
	pt3dadd(-56.54, 193.35, -10.55, 1.49)
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  }
}
proc shape3d_20() {
  apic[68] {	pt3dadd(-137.4, 262.4, -61.3, 0.37)
	pt3dadd(-137.52, 262.65, -61.25, 0.37)
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  }
}
proc shape3d_21() {
  apic[74] {	pt3dadd(-163.84, 118.61, 5.45, 0.74)
  }
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  }
}
proc shape3d_22() {
  apic[81] {	pt3dadd(-42.63, 68.73, -34.35, 1.24)
	pt3dadd(-43.6, 69.88, -38.2, 1.24)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
}

objref all, somatic, basal, apical
proc subsets() { local i
  objref all, somatic, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 60 dend[i] all.append()
    for i=0, 84 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 60 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 84 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
//access soma








create soma
n_axon_seg = 2
create iseg,hill,myelin[n_axon_seg],node[n_axon_seg]

objref isegs, hills, myelins, nodes

proc create_axon() {
  objref isegs, hills, myelins, nodes

  n_axon_seg = 2
  create iseg,hill,myelin[n_axon_seg],node[n_axon_seg]
  
  isegs = new SectionList()
  iseg isegs.append()
  hills = new SectionList()
  hill hills.append()
  myelins = new SectionList()
  for i=0, n_axon_seg-1 myelin[i] myelins.append()
  nodes = new SectionList()
  for i=0, n_axon_seg-1 node[i] nodes.append()
  soma {
    equiv_diam = sqrt(area(.5)/(4*PI))
  }

  iseg {               // initial segment between hillock + myelin
     L = 15
     nseg = 5
     diam = equiv_diam/10        // see Sloper and Powell 1982, Fig.71
  }

  hill {                
    L = 20
    nseg = 5
    diam(0:1) = 2*iseg.diam:iseg.diam
  }

  // construct myelinated axon with nodes of ranvier

  for i=0,n_axon_seg-1 {
    myelin[i] {         // myelin element
      nseg = 2
      L = 100
      diam = iseg.diam
    }
    node[i] {           // nodes of Ranvier
      nseg = 1
      L = 1.0
      diam = iseg.diam*.75       // nodes are thinner than axon
    }
  }

  soma connect hill(0), 0.5
  hill connect iseg(0), 1
  iseg connect node[0](0), 1
  node[0] connect myelin[0](0), 1

  for i=0,n_axon_seg-2  { 
      myelin[i] connect node[i+1](0), 1
      node[i+1] connect myelin[i+1](0), 1 
  }
}

// --------
// Spines
// --------
proc add_spines() { local a
  forsec basal {
    cm*=$1
    g_pas*=$1
  }
  forsec apical {
    cm*=$1
    g_pas*=$1
  }
	
}


proc init() {



cm_myelin = 0.04
g_pas_node = 0.02
v_init    = -62
Ek = -100
Ena = 60
Eca = 130

// This is rough initial parameter set. IT is overwritten by parameters loaded from best.params


//passive
ra  = 68.16690
rm  = 18017.30000
c_m  = 1.43870
epas_sim  = -31.40480
//gih
gih_end= 271.90500
gih_x2= 382.51900
gih_alpha=-0.08090
gih_start= 22.51460
ih_q10=2
//kslow
gkslow_start=2.03452
gkslow_alpha=-0.00986
gkslow_beta= 127.82800
//kfast
gka_start= 20.34520
gka_alpha= -0.00297
gka_beta= 320.43100
//na
gna_soma =128.14300
gna_api = 2.69229
dist_na = 687.53800
na_shift1 =-5.56301
na_shift2 =-4.52361
na_taum_scale=1
na_tauh_scale=1

//Ca
pcah_soma=1.33e-3
pcah_api=pcah_soma
dist_cah=600
cah_qm =2
ca_qh=2
cah_shift=0
cah_shifth=0

pcar_soma=0.27e-3
pcar_api=pcar_soma
dist_car=600
car_qh=1
car_qm=1
car_shift=0
car_shifth=0

//axon parameters
gkslow_node=1500
gka_node=1000
gna_node=30000
shift_na_act_axon=7
shift_na_inact_axon=3

// $s1 filename

  //forall delete_section()
  celldef()

  access soma
  
  // make sure no compartments exceed 50 uM length
  forsec all{
    diam_save = diam
    n = int(L/20)    
    if (n==0) n=1
    nseg = n 
    if (n3d() == 0) diam = diam_save
  }

  create_axon()

  iseg all.append()
  hill all.append()
  for i=0, n_axon_seg-1 myelin[i] all.append()
  for i=0, n_axon_seg-1 node[i] all.append()

  init_cell()
  density()
}


proc init_cell() {

  // passive

  forsec all{
    insert pas
    Ra = ra 
    cm = c_m 
    g_pas = 1/rm
    e_pas = epas_sim
  }

    // exceptions along the axon
     forsec myelins cm = cm_myelin
     forsec nodes g_pas = g_pas_node
  forsec all {
  	insert iA 
	insert kslow 
	insert na
	insert iH
	insert cah
	insert car
	insert cad
	insert bk
	insert sk
  }

  forsec all if(ismembrane("k_ion")) ek = Ek
  forsec all if(ismembrane("na_ion")) ena = Ena    
  forsec all eh=-33
  forsec all if(ismembrane("ca_ion")) {
 	vshift_ca = 0
  }
}
objref SomaStimSec,DendStimSec
proc density() {local Chisq,dumm localobj transvec, p_file
    objref SomaStimSec,DendStimSec
    soma SomaStimSec = new SectionRef()
    apic[11] DendStimSec = new SectionRef()
    DendStimSec.sec {nseg=40}
    /*
    transvec = new Vector(40)
    p_file = new File()
    p_file.ropen("best.params")
                    transvec.scanf(p_file)
            transvec.printf
    p_file.close()
    */
    ra  = 120.438 
    rm = 25812.2 
    c_m = 0.602042 
    epas_sim  = -47.8446
    gih_end  = 118.437 
	gih_x2 = 351.814 
    gih_alpha=-0.0137979
	gih_start=2.5117
	ih_q10=1.44732 
	gkslow_start= 3.78767
	gkslow_alpha= -0.0915783
	gkslow_beta=205.886 
	gka_start= 28.2824
	gka_alpha= -0.0117721 
	gka_beta= 331.65
	gna_soma = 352.142 
	gna_api = 56.4519 
	dist_na = 480.929 
	na_shift1 = -10.9975
	na_shift2 = -9.60842 
	pcah_soma = 9.27521e-05 
	pcah_api =0.000155847 
	dist_cah = 10.3458 
	cah_shift=-4.49601 
	cah_shifth=-7.11157 

	pcar_soma = 0.00314901 
	pcar_api = 0.000488401 
	dist_car = 924.858 
    car_shift=-9.67845
	car_shifth=-2.1308
	car_qm=1.15288
	
	gsk_soma=3.18076
	gsk_dend=0.524016 
	dist_sk=238.75 
	gbk_soma=0.638741 
	gbk_dend=1.22971
	dist_bk=27.5943	
    
    
 


    
    
    
    
    
  forsec all {
    Ra = ra 
    cm = c_m 
    g_pas = 1/rm
    e_pas = epas_sim
    vshiftm_na= na_shift1
    vshifth_na= na_shift2
    taum_scale_na=na_taum_scale
    tauh_scale_na=na_tauh_scale
    q10_iH=ih_q10
    shift_cah=cah_shift
    shifth_cah=cah_shifth

    shift_car=car_shift
    shifth_car=car_shifth
    qm_car=car_qm
  }


  add_spines(2)
  //isegs, hills, myelins, nodes
   // exceptions along the axon
   forsec myelins cm = cm_myelin
   forsec nodes g_pas = g_pas_node
   forall vshift_na = -5
   forsec myelins {
  	gbar_na    = gna_soma
	gbar_kslow =gkslow_beta 
	gbar_iA    = gka_beta
   }

  hill {
  	gbar_na = gna_node
	vshiftm_na=7
	vshifth_na=3
	gbar_iA = gka_node
	gbar_kslow = gkslow_node
  }
	
  iseg {
  	gbar_na = gna_node
	vshiftm_na=7
	vshifth_na=3
	gbar_iA = gka_node
	gbar_kslow = gkslow_node
  }
	
  forsec nodes {
  	gbar_na = gna_node
	vshiftm_na=7
	vshifth_na=3
	gbar_iA = gka_node
	gbar_kslow = gkslow_node
  }

   // we put in all of teh dendrites the same values as in the soma and then overwrite the appical values	
  forsec basal {
    gbar_na = gna_soma
    gbar_kslow = gkslow_start+gkslow_beta
    gbar_iA = gka_start+gka_beta
    gbar_iH=gih_start 
    pbar_car=pcar_soma
    pbar_cah=pcah_soma
    gbar_sk=gsk_dend
    gbar_bk=gbk_dend
  }
  
  soma {
    gbar_na = gna_soma
    gbar_kslow = gkslow_start+gkslow_beta
    gbar_iA = gka_start+gka_beta
    gbar_iH=gih_start
    pbar_car=pcar_soma
    pbar_cah=pcah_soma
    gbar_sk=gsk_soma
    gbar_bk=gbk_soma
  }

  
  soma distance(0,0.5)
 
  forsec  apical {
	dist1=distance(0)
 	dist2=distance(1)

	
	gbar_na = gna_api
	if (dist1<dist_na){
           gbar_na(0:1) = (gna_soma+dist1*(gna_api-gna_soma)/dist_na):(gna_soma+dist2*(gna_api-gna_soma)/dist_na)
        }


	pbar_cah = pcah_api
        if (dist1<dist_cah){
           pbar_cah(0:1) = (pcah_soma+dist1*(pcah_api-pcah_soma)/dist_cah):(pcah_soma+dist2*(pcah_api-pcah_soma)/dist_cah) 
        }

        pbar_car = pcar_api
        if (dist1<dist_car){
           pbar_car(0:1) = (pcar_soma+dist1*(pcar_api-pcar_soma)/dist_car):(pcar_soma+dist2*(pcar_api-pcar_soma)/dist_car) 
	   //(pcar_soma+dist1*(pcar_api-pcar_soma)/dist_car):(pcar_soma+dist2*(pcar_api-pcar_soma)/dist_car)
        } 


	gbar_iA(0:1) = (gka_start+gka_beta*exp(gka_alpha*dist1)):(gka_start+gka_beta*exp(gka_alpha*dist2))

	gbar_kslow(0:1) = (gkslow_start+gkslow_beta*exp(gkslow_alpha*dist1)):(gkslow_start+gkslow_beta*exp(gkslow_alpha*dist2))
	
	gbar_iH(0:1) = (gih_start+gih_end/(1+exp(gih_alpha*(dist1-gih_x2)))):(gih_start+gih_end/(1+exp(gih_alpha*(dist2-gih_x2))))
	 
	gbar_bk = gbk_dend
        if (dist1<dist_bk){
           gbar_bk(0:1) = (gbk_soma+dist1*(gbk_dend-gbk_soma)/dist_bk):(gbk_soma+dist2*(gbk_dend-gbk_soma)/dist_bk)
        }

	gbar_sk = gsk_dend
	if (dist1<dist_sk){
           gbar_sk(0:1) = (gsk_soma+dist1*(gsk_dend-gsk_soma)/dist_sk):(gsk_soma+dist2*(gsk_dend-gsk_soma)/dist_sk)
        }

	
    }

        forsec  apical {

                if (pcah_soma<pcah_api){
                        if (pbar_cah>pcah_api){
                                pbar_cah=pcah_api
                        }
                }
                if (pcah_soma>pcah_api){
                        if (pbar_cah<pcah_api){
                                pbar_cah=pcah_api
                        }
                }

                if (pcar_soma<pcar_api){
                        if (pbar_car>pcar_api){
                                pbar_car=pcar_api
                        }
                }
                if (pcar_soma>pcar_api){
                        if (pbar_car<pcar_api){
                                pbar_car=pcar_api
                        }
                }

                if (gbar_na<gna_api) gbar_na=gna_api
		if (gbar_bk<gbk_dend) gbar_bk=gbk_dend
		if (gbar_sk<gsk_dend) gbar_sk=gsk_dend	
        }


}

endtemplate A140612_1

