load_file("nrngui.hoc")

begintemplate geo5038801mod

    public init

    public soma, dend, apical_dendrite, axon, user5

    objref all, somatic, apical, axonal, basal, user5al

    
    {create soma[1]}
    {create axon[1]}

    {create dend[52]}
    {create apical_dendrite[79]}
    {create user5[70]}
    
    proc subsets() { local i
        objref all, somatic, basal, apical, user5al, axonal
        all = new SectionList()
        soma all.append()
        axon all.append()
        for i=0, 51 dend[i] all.append()
        for i=0, 78 apical_dendrite[i] all.append()
        for i=0, 69 user5[i] all.append()
        
        somatic = new SectionList()
        soma somatic.append()

        basal = new SectionList()
        for i=0, 51 dend[i] basal.append()

        apical = new SectionList()
        for i=0, 78 apical_dendrite[i] apical.append()
        
        user5al = new SectionList()
        for i=0, 69 user5[i] user5al.append()
        
        axonal = new SectionList()
        axon axonal.append()
        
    }

    
    

    proc initMigliore05(){
     
        t=0
        forsec all {
            v=Vrest
            if (ismembrane("nax") || ismembrane("na3")) {ena=55}
            if (ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {ek=-90}
            if (ismembrane("hd") ) {ehd_hd=-30}
        }
        finitialize(Vrest)
        fcurrent()

        forsec all {
            for (x) {
                if (ismembrane("na3")||ismembrane("nax")){e_pas(x)=v(x)+(ina(x)+ik(x))/g_pas(x)}
                if (ismembrane("hd")) {e_pas(x)=e_pas(x)+i_hd(x)/g_pas(x)}
                }
        }  

    }
    



    

    
    proc canalAllMigliore05(){ local ii,i

        gna =  .025
        AXONM = 5
        gkdr = 0.01
        //celsius = 35.0  
        KMULT =  0.03
        KMULTP = 0.03
        ghd=0.00005
        Vrest = -65
        Ra0 = 150                       //Ohm*cm
        RaAx = 50
        g_pas0 = 1/28000                //Siemens/cm^2   1/30000
        cm0 = 1
    
        forsec axonal{   
            insert nax gbar_nax=gna * AXONM
            insert kdr gkdrbar_kdr=gkdr
            insert kap gkabar_kap = KMULTP
        }
        
        forsec somatic{  
            insert hd ghdbar_hd=ghd	vhalfl_hd=-73
            insert na3 gbar_na3=gna
            insert kdr gkdrbar_kdr=gkdr
            insert kap gkabar_kap = KMULTP
        }
        
        access soma
        distance()

        forsec basal {
            insert hd ghdbar_hd=ghd vhalfl_hd=-73
            insert na3 gbar_na3=gna
            insert kdr gkdrbar_kdr=gkdr
            insert kap gkabar_kap=0
            insert kad gkabar_kad=0

            for (x) if (x>0 && x<1) { 
                xdist = distance(x)
                ghdbar_hd(x) = ghd*(1+3*xdist/100)
                if (xdist > 100){
                    vhalfl_hd=-81
                    gkabar_kad(x) = KMULT*(1+xdist/100)
                }else {
                    vhalfl_hd=-73
                    gkabar_kap(x) = KMULTP*(1+xdist/100)
                }
            }
        }
                        
        forsec apical {
            insert ds
            insert hd ghdbar_hd=ghd
            insert na3 gbar_na3=gna
            insert kdr gkdrbar_kdr=gkdr
            insert kap gkabar_kap=0
            insert kad gkabar_kad=0

            for (x) if (x>0 && x<1) { 
                xdist = distance(x)
                ghdbar_hd(x) = ghd*(1+3*xdist/100)
                if (xdist > 100){
                    vhalfl_hd=-81
                    gkabar_kad(x) = KMULT*(1+xdist/100)
                }else{
                    vhalfl_hd=-73
                    gkabar_kap(x) = KMULTP*(1+xdist/100)
                }
            }
        }
        
        
        forsec user5al {
            insert ds
            insert hd ghdbar_hd=ghd
            insert na3 gbar_na3=gna
            insert kdr gkdrbar_kdr=gkdr
            insert kap gkabar_kap=0
            insert kad gkabar_kad=0

            for (x) if (x>0 && x<1) { 
                xdist = distance(x)
                ghdbar_hd(x) = ghd*(1+3*xdist/100)
                if (xdist > 100){
                    vhalfl_hd=-81
                    gkabar_kad(x) = KMULT*(1+xdist/100)
                }else{
                    vhalfl_hd=-73
                    gkabar_kap(x) = KMULTP*(1+xdist/100)
                }
            }
        }

    }

    
    


    func lambda_f() { local i, x1, x2, d1, d2, lam
            if (n3d() < 2) {
                    return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
            }
    // above was too inaccurate with large variation in 3d diameter
    // so now we use all 3-d points to get a better approximate lambda
            x1 = arc3d(0)
            d1 = diam3d(0)
            lam = 0
            for i=1, n3d()-1 {
                    x2 = arc3d(i)
                    d2 = diam3d(i)
                    lam += (x2 - x1)/sqrt(d1 + d2)
                    x1 = x2   d1 = d2
            }
            //  length of the section in units of lambda
            lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

            return L/lam
    }

    proc geom_nseg() {
        freq = 50     // Hz, frequency at which AC length constant will be computed
        d_lambda = 0.1
        soma area(0.5) // make sure diam reflects 3d points
        forsec all {
            
            nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1
            print secname(), nseg, d_lambda, lambda_f(freq), L, freq, d_lambda}

    }
        

    
    proc init(){
        topol()
        subsets()
        
        Ra0 = 150
        RaAx = 50
        g_pas0 = 1/28000                //Siemens/cm^2   1/30000 
        cm0 = 1

        forsec all {insert pas e_pas=Vrest g_pas=g_pas0 Ra=Ra0 cm=cm0}
        forsec axonal {insert pas e_pas=Vrest g_pas = g_pas0 Ra=RaAx cm=cm0}  
        print 12
        geom_nseg()
        print 122
        canalAllMigliore05()
        print 123
        initMigliore05()
        print 124
        //geom_nseg()
    }
    
    
    
    
    proc topol(){
    
        {access soma[0]}
        {pt3dclear()}
        {pt3dadd(0,0,0.01,17.738)}
        {pt3dadd(0,0,9.24,17.738)}

        {soma[0] connect axon[0](0), 1}
        {access axon[0]}
        {pt3dclear()}
        {pt3dadd(-0.568,-1,-0.023,1.5)}
        {pt3dadd(3.5,7,7,1)}
        {pt3dadd(5.5,14,7,1)}
        {pt3dadd(6.5,22.5,6,1)}
        {pt3dadd(6,29.5,7,1)}
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    }


    
    
    
    
    
    
    
    
endtemplate geo5038801mod
